PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Word Priming Experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'clothes'},
      {'study_word': 'bag'},
      {'study_word': 'window'},
      {'study_word': 'knife'},
      {'study_word': 'door'},
      {'study_word': 'playground'},
      {'study_word': 'song'},
      {'study_word': 'chair'},
      {'study_word': 'bed'},
      {'study_word': 'curtain'},
      {'study_word': 'animals '},
      {'study_word': 'perfume'},
      {'study_word': 'shoes'},
      {'study_word': 'mobile'},
      {'study_word': 'paper'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_n_'},
      {'test': '_ea_o_'},
      {'test': 'c_m_r_'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'},
      {'test': '_o_g'},
      {'test': '_i_n_d_w'},
      {'test': '_e_'},
      {'test': 'm_b_l_'},
      {'test': '_a_e_'},
      {'test': '_a_'},
      {'test': 'c_r_a_n'},
      {'test': 'p_a_'},
      {'test': 'a_i_a_s'},
      {'test': 's_i_c_'}]
    Routine test
  LoopTerminator trials_2
